PsychoPy2experiment version="2026.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920,1080]
  color = -1.0000, -1.0000, -1.0000
  expName = categorizacion_emocional
  frameRateMsg = Se está intentando medir la frecuencia de fotogramas de la pantalla, por favor, espere...
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine instrucciones
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    TextComponent instructioness_txt
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Bienvenido/a a esta tarea.

        En cada ensayo verás una fotografía de un rostro.
        Tu tarea es identificar la emoción que expresa esa persona
        lo más rápido y con la mayor precisión posible.

        Usa las siguientes teclas para responder:

        F  →  Alegría
        G  →  Tristeza
        H  →  Ira
        J  →  Miedo

        Mantén los dedos sobre esas teclas durante toda la tarea.

        Cuando estés listo/a, presiona la barra espaciadora para comenzar la práctica.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practica
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    PolygonComponent fix_cross_practice
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent palabra_txt
      letterHeight = 0.08
      startVal [time (s)] = 0.5
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      text [set every repeat]:
        $palabra_p
    KeyboardComponent key_resp_practice
      allowedKeys = 'f', 'g', 'h', 'j'
      correctAns = $tecla_correcta_p
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine fin_experimento
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    TextComponent fin_experimento_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        La tarea ha finalizado

        Gracias por tu participación
  Routine descanso
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    TextComponent descanso_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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      text:
        Fase de descanso
  Routine experimental
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    PolygonComponent fix_cross_experimental
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent imagen_experiemental
      image [set every repeat] = $imagen
      startVal [time (s)] = 0.5
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    KeyboardComponent key_resp_experimental
      allowedKeys = 'f', 'g', 'h', 'j'
      correctAns = $tecla_correcta
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine feedback_practica
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        mensaje_feedback = ""
        if key_resp_practice.corr == 1:
            mensaje_feedback = "¡Correcto!"
        else:
            mensaje_feedback = "Incorrecto"
    TextComponent feedback_txt
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $mensaje_feedback
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  Routine fin_practica
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    TextComponent fin_fase_practica_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        La práctica ha terminado.

        A continuación verás fotografías de rostros en lugar de palabras.

        Ya no recibirás retroalimentación sobre tus respuestas.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ITI
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    TextComponent iti_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine instrucciones_practica
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    TextComponent inicio_fase_practica_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        A continuación realizarás algunos ensayos de práctica.

        Verás palabras en pantalla. Presiona la tecla que corresponde a cada emoción:

        F  →  Alegría
        G  →  Tristeza
        H  →  Ira
        J  →  Miedo

        Después de cada respuesta verás si fue correcta o incorrecta.

        Presiona la barra espaciadora para iniciar.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instrucciones_experimental
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    TextComponent inicio_fase_experimental_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Recuerda:

        F  →  Alegría
        G  →  Tristeza
        H  →  Ira
        J  →  Miedo

        Responde lo más rápido y con la mayor precisión posible.

        Presiona la barra espaciadora para comenzar.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine cruz_practica
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    PolygonComponent cruz_p
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine cruz_experimental
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    PolygonComponent cruz_exp
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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Flow
  Routine instrucciones
  Routine instrucciones_practica
  LoopInitiator loop_practica loopType="TrialHandler"
    conditionsFile = conditions/condiciones_practica.xlsx
    endPoints = [0,1]
    loopType = random
    nReps = 1
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    conditions:
      [{'id_p': 1, 'palabra_p': 'ALEGRÍA', 'emocion_p': 'alegria', 'tecla_correcta_p': 'f'},
      {'id_p': 2, 'palabra_p': 'ALEGRÍA', 'emocion_p': 'alegria', 'tecla_correcta_p': 'f'},
      {'id_p': 3, 'palabra_p': 'ALEGRÍA', 'emocion_p': 'alegria', 'tecla_correcta_p': 'f'},
      {'id_p': 4, 'palabra_p': 'TRISTEZA', 'emocion_p': 'tristeza', 'tecla_correcta_p': 'g'},
      {'id_p': 5, 'palabra_p': 'TRISTEZA', 'emocion_p': 'tristeza', 'tecla_correcta_p': 'g'},
      {'id_p': 6, 'palabra_p': 'TRISTEZA', 'emocion_p': 'tristeza', 'tecla_correcta_p': 'g'},
      {'id_p': 7, 'palabra_p': 'IRA', 'emocion_p': 'ira', 'tecla_correcta_p': 'h'},
      {'id_p': 8, 'palabra_p': 'IRA', 'emocion_p': 'ira', 'tecla_correcta_p': 'h'},
      {'id_p': 9, 'palabra_p': 'IRA', 'emocion_p': 'ira', 'tecla_correcta_p': 'h'},
      {'id_p': 10, 'palabra_p': 'MIEDO', 'emocion_p': 'miedo', 'tecla_correcta_p': 'j'},
      {'id_p': 11, 'palabra_p': 'MIEDO', 'emocion_p': 'miedo', 'tecla_correcta_p': 'j'},
      {'id_p': 12, 'palabra_p': 'MIEDO', 'emocion_p': 'miedo', 'tecla_correcta_p': 'j'}]
    Routine cruz_practica
    Routine practica
    Routine feedback_practica
  LoopTerminator loop_practica
  Routine fin_practica
  Routine descanso
  Routine instrucciones_experimental
  LoopInitiator loop_experimental loopType="TrialHandler"
    conditionsFile = conditions/condiciones_experimental.xlsx
    endPoints = [0,1]
    loopType = random
    nReps = 1
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    conditions:
      [{'id': 1, 'imagen': 'media/anger/anger_01.png', 'emocion': 'ira', 'tecla_correcta': 'h'},
      {'id': 2, 'imagen': 'media/anger/anger_02.png', 'emocion': 'ira', 'tecla_correcta': 'h'},
      {'id': 3, 'imagen': 'media/anger/anger_03.png', 'emocion': 'ira', 'tecla_correcta': 'h'},
      {'id': 4, 'imagen': 'media/anger/anger_04.png', 'emocion': 'ira', 'tecla_correcta': 'h'},
      {'id': 5, 'imagen': 'media/anger/anger_05.png', 'emocion': 'ira', 'tecla_correcta': 'h'},
      {'id': 6, 'imagen': 'media/anger/anger_06.png', 'emocion': 'ira', 'tecla_correcta': 'h'},
      {'id': 7, 'imagen': 'media/anger/anger_07.png', 'emocion': 'ira', 'tecla_correcta': 'h'},
      {'id': 8, 'imagen': 'media/anger/anger_08.png', 'emocion': 'ira', 'tecla_correcta': 'h'},
      {'id': 9, 'imagen': 'media/anger/anger_09.png', 'emocion': 'ira', 'tecla_correcta': 'h'},
      {'id': 10, 'imagen': 'media/anger/anger_10.png', 'emocion': 'ira', 'tecla_correcta': 'h'},
      {'id': 11, 'imagen': 'media/fear/fear_01.png', 'emocion': 'miedo', 'tecla_correcta': 'j'},
      {'id': 12, 'imagen': 'media/fear/fear_02.png', 'emocion': 'miedo', 'tecla_correcta': 'j'},
      {'id': 13, 'imagen': 'media/fear/fear_03.png', 'emocion': 'miedo', 'tecla_correcta': 'j'},
      {'id': 14, 'imagen': 'media/fear/fear_04.png', 'emocion': 'miedo', 'tecla_correcta': 'j'},
      {'id': 15, 'imagen': 'media/fear/fear_05.png', 'emocion': 'miedo', 'tecla_correcta': 'j'},
      {'id': 16, 'imagen': 'media/fear/fear_06.png', 'emocion': 'miedo', 'tecla_correcta': 'j'}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
    Routine cruz_experimental
    Routine experimental
    Routine ITI
  LoopTerminator loop_experimental
  Routine fin_experimento
